PsychoPy2experiment version="2022.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = click_baseline
  keyboardBackend = PsychToolbox
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_trial
      Code Type = Auto->JS
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      Begin Experiment:
        class Point:
            """
            Represents (x, y) coordinates in 2-dimensional space.
            """
            def __init__(self, x, y):
                self.x = x
                self.y = y

            def __sub__(self, other):
                """
                Returns the euclidean distance between this and the
                other passed point.
                """
                dist = ((self.x - other.x)**2 + (self.y - other.y)**2)**(1/2)
                return dist

            def __str__(self):
                """
                Returns string representation '(x, y)' of this point.
                """
                return "({}, {})".format(self.x, self.y)

            def __repr__(self):
                """
                Returns description of how this point can be
                recreated.
                """
                return "Point({}, {})".format(self.x, self.y)

            def as_tuple(self):
                """
                Returns a (x, y) tuple with this point's x/y coordinates.
                """
                return self.x, self.y

        def points_collide(point_ls, new_point):
            """
            Goes through a list of Point instances and compares
            the new_point to see if the new_point is too close
            to one of the points in the point_ls. Returns True if
            there is a collision, otherwise False.
            """
            collides = False
            for old_point in point_ls:
                if (new_point - old_point) < TARGET_SIZE_DEG:
                    collides = True
                    break
            return collides

        def gen_rand_point():
            """
            Generates a random point within the target area.
            """
            x_coord = randint(-AREA_WIDTH_DEG//2, AREA_WIDTH_DEG//2)
            y_coord = randint(-AREA_HEIGHT_DEG//2, AREA_HEIGHT_DEG//2)
            return Point(x_coord, y_coord)

        def gen_point_ls():
            """
            Generate a list of (x, y) coordinate Point instances until
            there are as many instances as there should be targets/trial.
            """
            point_ls = []
            while len(point_ls) < NUM_TARGETS:
                new_point = gen_rand_point()
                if not points_collide(point_ls, new_point):
                    point_ls.append(new_point)
            return point_ls

        def gen_trial_ls():
            """
            Generates a list of lists, where each inner list corresponds to
            points describing the placements of all targets in a trial.
            """
            trial_ls = []
            while len(trial_ls) < NUM_TRIALS:
                point_ls = gen_point_ls()
                trial_ls.append(point_ls)
            return trial_ls

        trial_ls = gen_trial_ls()

        # generate one TextStim instance for each target
        # (numbering starting from 1)
        targets = []
        for i in range(1, NUM_TARGETS+1):
            new_target = visual.TextStim(
                win=win,
                name='text_target_{}'.format(i),
                text='{}'.format(i),
                font='Arial',
                units='deg',
                pos=(0, 0),
                height=TARGET_SIZE_DEG,
                wrapWidth=None, ori=0,
                color=TARGET_NEUTRAL_COL,
                colorSpace='rgb',
                opacity=1,
                languageStyle='LTR',
                depth=-1.0)
            targets.append(new_target)

        # initialize trial counter
        trial_counter = 0
      Begin Routine:
        # fetch the list of Point instances representing the
        # (x, y) coordinates that are to be used for targets
        # during this trial
        point_ls = trial_ls[trial_counter]

        # assign positions to the targets and reset their
        # colors to white
        for i, target in enumerate(targets):
            target.pos = point_ls[i].as_tuple()
            target.color = TARGET_NEUTRAL_COL

        # make a shallow copy of the targets list that keeps
        # track of which targets haven't been clicked on yet
        nonclicked_targets = targets[:]

        # set first target to be clicked
        click_target = nonclicked_targets.pop(0)

        # reset list of times when clicks occur
        response_times = []

        # fetch the routine start time
        trial_start_time = globalClock.getTime()
      Each Frame:
        # draw all of the targets
        for target in targets:
            target.draw()

        # check if mouse button has been clicked, and if so,
        # if any of the targets were clicked
        buttons = mouse_trial.getPressed()
        if buttons != prevButtonState:  # button state changed?
            prevButtonState = buttons
            if sum(buttons) > 0:  # state changed to a new click
                # check if the mouse was inside of target
                if click_target.contains(mouse_trial):
                    # change color of target to indicate it's been clicked
                    click_target.color = TARGET_CLICKED_COL
                    # save the click time
                    response_times.append(trialClock.getTime())
                    # if there are targets left to click, make the next target in line clickable
                    # otherwise, end the routine
                    if len(nonclicked_targets) > 0:
                        click_target = nonclicked_targets.pop(0)
                    else:
                        continueRoutine = False
      End Routine:
        # save trial data
        trials.addData('response_times', response_times)
        trials.addData('trial_start_time', trial_start_time)

        # increment trial counter
        trial_counter += 1
    MouseComponent mouse_trial
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text_instructions
      letterHeight = TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = deg
      wrapWidth = 25
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      text:
        Din uppgift i det här testet är att så snabbt du kan klicka med musen på samtliga siffror som kommer upp på skärmen i nummordning. Klicka alltså på alla siffrorna, i ordningen 1, 2, 3, 4… 9.

        Använd vänster musknapp.

        Testet tar ca 3 minuter att genomföra.
    MouseComponent mouse_instructions
      clickable = text_go
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.5
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    TextComponent text_go
      letterHeight = TXT_SIZE_S
      pos = (0, -6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Klicka här när du läst klart för att börja testet
      units = deg
      wrapWidth = 25
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    CodeComponent code_constants
      Code Type = Auto->JS
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      Before Experiment:
        ### SET EXPERIMENT CONSTANTS ###
        # width/height of area where targets
        # can appear, in degrees
        AREA_WIDTH_DEG = 14
        AREA_HEIGHT_DEG = 14

        # target text (digit) size, in degrees
        TARGET_SIZE_DEG = 1.5
        # target text neutral (non-clicked) color
        TARGET_NEUTRAL_COL = "#FFFFFF"
        # target text clicked color
        TARGET_CLICKED_COL = "#BBFFBB"

        # large/medium/small instructions text size,
        # in degrees
        TXT_SIZE_L = 2
        TXT_SIZE_M = 0.8
        TXT_SIZE_S = 0.6

        # number of trials to run
        NUM_TRIALS = 3

        # number of targets (digits/numbers) to use, ie how many
        # targets to show per trial. target numbering always
        # starts from 1.
        NUM_TARGETS = 9

        ### END SET EXPERIMENT CONSTANTS ###
  Routine end_routine
    TextComponent text_end
      letterHeight = TXT_SIZE_M
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
      wrapWidth = 26
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      text:
        Bra jobbat!

        Mata in ditt deltagar-ID för kalibreringen som kommer härnäst.
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = NUM_TRIALS
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    Routine trial
  LoopTerminator trials
  Routine end_routine
